PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = flanker
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine feedback
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    CodeComponent feedback_logic
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr:
            feedback_message = 'Correct!'
            feedback_message_color = 'green'
        else:
            feedback_message = 'Incorrect'
            feedback_message_color = 'red'
    TextComponent feedback_text
      color [set every repeat] = $feedback_message_color
      durationEstim = 0.3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $feedback_message
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  Routine instructions
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    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Flanker Task

        Press LEFT and RIGHT arrows
        to indicate the direction of the CENTER arrow.

        Press space bar to start.
    KeyboardComponent instruction_key
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent flanker_logic
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        # before the experiment, define the 4 possible stimuli
        all_stims = [
            {'stim_text': '<<<<<', 'stim_type': 'congruent', 'corr_ans': 'left'},
            {'stim_text': '<<><<', 'stim_type': 'incongruent', 'corr_ans': 'right'},
            {'stim_text': '>>>>>', 'stim_type': 'congruent', 'corr_ans': 'right'},
            {'stim_text': '>><>>', 'stim_type': 'incongruent', 'corr_ans': 'left'}
         ]

        n_trials = 20
        stims = random.choices(all_stims, k=n_trials)
      Begin Routine:
        curr_stim = stims[trials.thisN]
        stim_text = curr_stim['stim_text']
        stim_type = curr_stim['stim_type']
        corr_ans = curr_stim['corr_ans']
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = +
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    TextComponent flanker_stim
      durationEstim = 1.0
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $stim_text
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $corr_ans
      durationEstim = 1.0
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = n_trials
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    Routine trial
    Routine feedback
  LoopTerminator trials
