PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = paired_associate
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine study_trial
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    CodeComponent get_stim
      Code Type = Auto->JS
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      Begin Routine:
        image = images[study_loop.thisN]
        word = words[study_loop.thisN]
    ImageComponent study_image
      image [set every repeat] = $image
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3.0
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    TextComponent study_word
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $word
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  Routine test_trial
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    CodeComponent get_stim_test
      Code Type = Auto->JS
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      Begin Routine:
        image = images[test_loop.thisN]
        word = words[test_loop.thisN]
    ImageComponent test_image
      image [set every repeat] = $image
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.2
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    TextboxComponent test_response
      bold = False
      borderColor = white
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.2
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    KeyboardComponent test_return
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine test_instructions
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    CodeComponent shuffle_stims
      Code Type = Auto->JS
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      Begin Routine:
        pairs = list(zip(images, words))
        random.shuffle(pairs)
        images, words = zip(*pairs)
    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        TEST Phase

        You will see the image from each pair.
        Type the word it was paired with and press ENTER.

        Press ESC at any time to quit.
        Press SPACE to begin.
    KeyboardComponent instruction_text_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine study_instructions
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    CodeComponent set_stims
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import numpy as np

        n_pairs = 10
        # stims can be objects, faces, scenes
        stim_dir = '../../_stimuli/objects/'

        # get 10 random images (id's range from 0-60)
        image_ids = random.sample(range(0,61), n_pairs)
        images = [f'{stim_dir}/{image_id}.jpg' for image_id in image_ids]

        # load 10 random words
        all_words = np.loadtxt('../../_stimuli/words.txt', dtype=str).tolist()
        words = random.sample(all_words, n_pairs)
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Paired Associate Memory Task
        STUDY Phase

        You will see an image paired with a word.
        Try to remember which image and word go together.


        Press ESC at any time to quit.
        Press SPACE to begin.
    KeyboardComponent instructions_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine study_instructions
  LoopInitiator study_loop loopType="TrialHandler"
    loopType = random
    nReps = n_pairs
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    Routine study_trial
  LoopTerminator study_loop
  Routine test_instructions
  LoopInitiator test_loop loopType="TrialHandler"
    loopType = random
    nReps = n_pairs
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    Routine test_trial
  LoopTerminator test_loop
