PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = nback
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    CodeComponent nback_logic
      Code Type = Auto->JS
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      Begin Experiment:
        # note that the N is set in the first routine
        import random
        sequence = []
        all_stimuli = ['B', 'C', 'D', 'F', 'G', 'H', 'J', 'K']
      Begin Routine:
        # do a target with 50% probability
        if len(sequence) > n and random.random() < 0.5:
            curr_stim = sequence[-n]
            is_target = True
            corr_ans = 'space'
        else:
            curr_stim = random.choice(all_stimuli)
            # make sure to pick a different letter than N ago
            if len(sequence) > n and curr_stim == sequence[-n]:
                remaining = [l for l in all_stimuli if l != sequence[-n]]
                curr_stim = random.choice(remaining)
            is_target = False
            corr_ans = None

        sequence.append(curr_stim)
        thisExp.addData('stim', curr_stim)
        thisExp.addData('is_target', is_target)
    TextComponent stim
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $curr_stim
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $corr_ans
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f" {n}-Back Task \n\n Press the SPACE bar if the current stimulus matches the one from {n} trials ago. \n\n Press SPACE to begin."
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    KeyboardComponent instructions_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine set_n
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    TextComponent set_n_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        N-Back Task

        Set N:
        Press ‘1’ for 1-back, ‘2’ for 2-back, or ‘3’ for 3-back task.
    KeyboardComponent set_n_key_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_n_code
      Code Type = Auto->JS
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      End Routine:
        if set_n_key_resp.keys[0] == '1':
            n = 1
        elif set_n_key_resp.keys[0] == '2':
            n = 2
        elif set_n_key_resp.keys[0] == '3':
            n = 3
  Routine end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You are done with the experiment! Press SPACE to finish.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testing_text
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Flow
  Routine set_n
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine trial
  LoopTerminator trials
  Routine end
