PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = srtt
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Serial Reaction Time Task (SRTT)

        Place the first two fingers of each hand on the F, G, H, and J keys.

        You will see one of four boxes highlight at a time; press the finger corresponding to that box.

        Press any of the four keys to begin.
    KeyboardComponent instructions_key_resp
      allowedKeys = 'f','g','h','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pattern_trial
    CodeComponent pattern_logic
      Code Type = Auto->JS
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      Begin Experiment:
        pattern = [0,2,1,3,2,0,0,3] # positions in the 4 keys
        key_dict = {0:'f', 1:'g', 2:'h', 3:'j'} # map position to a key name
        x_pos_dict = {0:-0.3, 1:-0.1, 2:0.1, 3:0.3} # map position to an X in xy coordinates

        # start with 8 repetitions of the pattern
        n_repeats = 8
        all_target_pos = pattern*n_repeats
        all_target_key = [key_dict[k] for k in all_target_pos]
        all_target_x = [x_pos_dict[k] for k in all_target_pos]
      Begin Routine:
        target_pos = all_target_pos[pattern_trials.thisN]
        target_key = all_target_key[pattern_trials.thisN]
        target_x = all_target_x[pattern_trials.thisN]
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    PolygonComponent box1
      fillColor = white
      lineColor = black
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent box2
      fillColor = white
      lineColor = black
      pos = (-0.1, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent box3
      fillColor = white
      lineColor = black
      pos = (0.1, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent box4
      fillColor = white
      lineColor = black
      pos = (0.3, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent target_box
      fillColor = blue
      lineColor = blue
      pos [set every repeat] = (target_x, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.1
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    KeyboardComponent key_resp
      allowedKeys = 'f','g','h','j'
      correctAns = $target_key
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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  Routine random_trial
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    CodeComponent random_logic
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        # finish with 16 random trials (2 loops of 8-key pattern)
        n_random_trials = 16
        random_target_pos = random.choices([0,1,2,3], k=n_random_trials)
        random_target_key = [key_dict[k] for k in random_target_pos]
        random_target_x = [x_pos_dict[k] for k in random_target_pos]
      Begin Routine:
        target_pos = random_target_pos[random_trials.thisN]
        target_key = random_target_key[random_trials.thisN]
        target_x = random_target_x[random_trials.thisN]
    PolygonComponent box1_2
      fillColor = white
      lineColor = black
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent box2_2
      fillColor = white
      lineColor = black
      pos = (-0.1, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent box3_2
      fillColor = white
      lineColor = black
      pos = (0.1, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent box4_2
      fillColor = white
      lineColor = black
      pos = (0.3, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent target_box_2
      fillColor = blue
      lineColor = blue
      pos [set every repeat] = (target_x, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.1
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','g','h','j'
      correctAns = $target_key
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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Flow
  Routine instructions
  LoopInitiator pattern_trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(pattern)*n_repeats
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    Routine pattern_trial
  LoopTerminator pattern_trials
  LoopInitiator random_trials loopType="TrialHandler"
    loopType = sequential
    nReps = n_random_trials
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    Routine random_trial
  LoopTerminator random_trials
